<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>replace_me</file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_cropfilter.CropFilterModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <retention_time>
                <min>0.5</min>
                <max>30.0</max>
            </retention_time>
            <scan_definition/>
        </parameter>
        <parameter name="m/z">
            <min>70.0</min>
            <max>1060.0</max>
        </parameter>
        <parameter name="Suffix">filtered</parameter>
        <parameter name="Remove source file after filtering">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">1000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">0.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min group size in # of scans">3</parameter>
        <parameter name="Group intensity threshold">2000.0</parameter>
        <parameter name="Min highest intensity">5000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>1.0E-8</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Wavelets (ADAP)">
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            <module name="Wavelets (ADAP)">
                <parameter name="S/N threshold">3.0</parameter>
                <parameter name="S/N estimator" selected="Intensity window SN">
                    <module name="Intensity window SN"/>
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                </parameter>
                <parameter name="min feature height">5000.0</parameter>
                <parameter name="coefficient/area threshold">1.0</parameter>
                <parameter name="Peak duration range">
                    <min>1.0</min>
                    <max>7.0</max>
                </parameter>
                <parameter name="RT wavelet range">
                    <min>1.0</min>
                    <max>5.0</max>
                </parameter>
            </module>
        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="true">0.01</parameter>
        <parameter name="RT range for MS2 scan pairing (min)" selected="true">0.5</parameter>
        <parameter name="Remove original feature list">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_deisotoper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>1.0E-8</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="Monotonic shape">false</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Lowest m/z</parameter>
        <parameter name="Remove original peaklist">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>1.0E-8</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">80.0</parameter>
        <parameter name="Retention time tolerance" type="absolute">0.5</parameter>
        <parameter name="Weight for RT">20.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.csvexport.CSVExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">
            <current_file>C:\Users\mcbrider5002\Desktop\Workspace\phd\peak_picking\MZmine-2.53-Windows\replace_me</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
            <item>Export row identity (main ID)</item>
            <item>Export row identity (all IDs)</item>
            <item>Export row identity (main ID + details)</item>
            <item>Export row comment</item>
            <item>Export row number of detected peaks</item>
        </parameter>
        <parameter name="Export data file elements">
            <item>Peak status</item>
            <item>Peak name</item>
            <item>Peak m/z</item>
            <item>Peak RT</item>
            <item>Peak RT start</item>
            <item>Peak RT end</item>
            <item>Peak duration time</item>
            <item>Peak height</item>
            <item>Peak area</item>
            <item>Peak charge</item>
            <item>Peak # data points</item>
            <item>Peak FWHM</item>
            <item>Peak tailing factor</item>
            <item>Peak asymmetry factor</item>
            <item>Peak m/z min</item>
            <item>Peak m/z max</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
