<batch>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>/Users/simon/Dropbox/BioResearch/Meta_clustering/MS2LDA/multifile_ms2lda_manuscript/Supporting_Files/data/beers/Beer_multibeers_2_T10_POS.mzML</file>
        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.filtering.cropper.CropFilterModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES" />
        <parameter name="Scans">
            <retention_time>
                <min>0.5</min>
                <max>1.0</max>
            </retention_time>
            <scan_definition />
        </parameter>
        <parameter name="m/z">
            <min>85.0</min>
            <max>1060.0</max>
        </parameter>
        <parameter name="Suffix">filtered</parameter>
        <parameter name="Remove source file after filtering">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES" />
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition />
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">10000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false" />
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES" />
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition />
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">0.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false" />
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES" />
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min group size in # of scans">3</parameter>
        <parameter name="Group intensity threshold">10000.0</parameter>
        <parameter name="Min highest intensity">10000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.peakpicking.deconvolution.DeconvolutionModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS" />
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Wavelets (ADAP)">
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            <module name="Wavelets (ADAP)">
                <parameter name="S/N threshold">10.0</parameter>
                <parameter name="S/N estimator" selected="Intensity window SN">
                    <module name="Intensity window SN" />
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                </parameter>
                <parameter name="min feature height">10.0</parameter>
                <parameter name="coefficient/area threshold">1.0</parameter>
                <parameter name="Peak duration range">
                    <min>0.0</min>
                    <max>5.0</max>
                </parameter>
                <parameter name="RT wavelet range">
                    <min>0.2</min>
                    <max>0.5</max>
                </parameter>
            </module>
        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="true">0.01</parameter>
        <parameter name="RT range for MS2 scan pairing (min)" selected="true">0.2</parameter>
        <parameter name="Remove original peak list">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.isotopes.deisotoper.IsotopeGrouperModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS" />
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.1</parameter>
        <parameter name="Monotonic shape">false</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Remove original peaklist">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.orderpeaklists.OrderPeakListsModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS" />
    </batchstep>
	<batchstep method="net.sf.mzmine.modules.peaklistmethods.io.csvexport.CSVExportModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS" />
        <parameter name="Filename">
            <current_file>/Users/simon/git/vimms/DSDAWithDE/output/Beer_multibeers_2_T10_POS_box.csv</current_file>
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        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Export common elements">
            <item>Export row ID</item>
            <item>Export row m/z</item>
            <item>Export row retention time</item>
        </parameter>
        <parameter name="Export quantitation results and other information">false</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.gnpsexport.GNPSExportAndSubmitModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS" />
        <parameter name="Filename">
            <current_file>/Users/simon/git/vimms/DSDAWithDE/output/Beer_multibeers_2_T10_POS.mgf</current_file>
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        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">ALL</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.mztabexport.MzTabExportModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS" />
        <parameter name="Filename">
            <current_file>/Users/simon/git/vimms/DSDAWithDE/output/Beer_multibeers_2_T10_POS_pp.mzTab</current_file>
        </parameter>
        <parameter name="Include all peaks">true</parameter>
    </batchstep>
</batch>